PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = VR Questionnaire
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Routines
  Routine trial
    KeyboardComponent key_resp_16
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        VR Questionnaire

        Please respond with the best answer for each of the following questions. To select an answer, press the number shown before the answer choice.

        Press any key to continue.
  Routine Q1
    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5','6','7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Q2
    KeyboardComponent key_resp_2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Section 1
        Usability of the current environment

        Press any key to continue.
  Routine Q3
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        I thought the virtual reality system was easy to use:

        1. Strongly agree  2. Somewhat agree  3. Neither agree or disagree   4. Somewhat disagree  5. Strongly disagree
    KeyboardComponent key_resp_17
      allowedKeys = '1','2','3','4','5'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Q4
    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3','4','5','6','7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        I quickly adjusted to the virtual environment experience:

        1. Strongly agree   2. Somewhat agree   3. Neither agree or disagree   4. Somewhat disagree   5. Strongly disagree
  Routine Q5
    KeyboardComponent key_resp_4
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Presence Questionnaire (PQ)
        All questions use a seven point Likert scale from 1 to 7 where 1 is equivalent to “not responsive”/“not compelling” etc. and 7 is equivalent to “very responsive”/“very compelling” etc.

        Press any key to continue.
  Routine Q6
    KeyboardComponent key_resp_5
      allowedKeys = '1','2','3','4','5','6','7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        How responsive was the environment to actions that you initiated (or performed)?

        Not responsive 1 2 3 4 5 6 7 Very responsive
  Routine Q7
    KeyboardComponent key_resp_6
      allowedKeys = '1','2','3','4','5','6','7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        How completely were you able to actively survey or search the environment using vision?

        Not at all 1 2 3 4 5 6 7 Completely
  Routine Q8
    KeyboardComponent key_resp_7
      allowedKeys = '1','2','3','4','5','6','7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        How compelling was your sense of moving around inside the virtual environment?

        Not compelling 1 2 3 4 5 6 7 Very compelling
  Routine Q9
    KeyboardComponent key_resp_8
      allowedKeys = '1','2','3','4','5','6','7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        How well could you examine objects from multiple viewpoints?

        Not at all 1 2 3 4 5 6 7 Completely
  Routine Q10
    KeyboardComponent key_resp_9
      allowedKeys = '1','2','3','4','5','6','7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_11
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        How proficient in moving and interacting with the virtual environment did you feel at the end of the experience?

        Not at all proficient 1 2 3 4 5 6 7 Very proficient
  Routine Q11
    KeyboardComponent key_resp_10
      allowedKeys = '1','2','3','4','5','6','7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_12
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        How much delay did you experience between your actions and expected outcomes?

        No delay 1 2 3 4 5 6 7 A lot of delay
  Routine Q12
    KeyboardComponent key_resp_11
      allowedKeys = '1','2','3','4','5','6','7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_13
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        How much did the visual display quality interfere or distract you from performing assigned tasks or required activities?

        Not at all distracting 1 2 3 4 5 6 7 Very distracting
  Routine Q13
    KeyboardComponent key_resp_12
      allowedKeys = '1','2','3','4','5','6','7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_14
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        How much did the control devices interfere with the performance of assigned tasks or with other activities?

        No interference 1 2 3 4 5 6 7 A lot of interference
  Routine Q14
    KeyboardComponent key_resp_13
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Section 3
        Motion Sickness

        Press any key to continue.
  Routine Q15
    TextComponent text_16
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        How much did motion sickness/nausea did you experience during the task?

        No motion sickness 1 2 3 4 5 6 7 Very nauseous
    KeyboardComponent key_resp_18
      allowedKeys = '1','2','3','4','5','6','7'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Q16
    KeyboardComponent key_resp_14
      allowedKeys = '1','2','3','4','5'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_17
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        How much did motion sickness interfere or distract you from performing
        assigned tasks or required activities?

        Not at all distracting 1 2 3 4 5 6 7 Very distracting
  Routine Q17
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you!

        Press any key to exit.
    KeyboardComponent key_resp_15
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Q18
    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Did you experience any of the following symptoms:

        1. Dizziness   2. Overheating   3. Nausea
        4. Sweatiness    5. Thirst
    KeyboardComponent key_resp_19
      allowedKeys = '1','2','3','4','5'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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Flow
  Routine trial
  Routine Q2
  Routine Q3
  Routine Q4
  Routine Q5
  Routine Q6
  Routine Q7
  Routine Q8
  Routine Q9
  Routine Q10
  Routine Q11
  Routine Q12
  Routine Q13
  Routine Q14
  Routine Q15
  Routine Q16
  Routine Q18
  Routine Q17
